PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = coffee_distCheck
  Units = use prefs
  Screen = 1
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Routines
  Routine whatFirst
    TextComponent text_2
      text = Which direction of the cubes moving did you see first?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      pos = 0, -0.4
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      categoryChoices = Horizontal, Vertical
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    CodeComponent code_2
      Each Frame:
        if t > 0.0:
                rating.draw()
                continueRoutine = rating.noResponse
                if rating.noResponse == False:
                    name = "./DISTANCES/%s"%(expInfo['participant'])
                    with open(name, "a") as myfile:
                        myfile.write("\n")
                        myfile.write(rating.getRating())
  Routine DistanceCheck
    CodeComponent codeDistanceCheckUP
      Begin Experiment:
        with open("./ScreenRatio") as f:
            content = f.readlines()

        ScreenH = float(content[0])
        ScreenV = float(content[1])

        YPOS = 0.1
        XPOS = 5/(ScreenH/2)


        demValues = []


        W = 0.05
        H = 0.075

        changeRate=0.025
      Begin Routine:
        YPOS= YPOS + changeRate
      Each Frame:
        if key_resp_3.status == STARTED:
            theseKeys = event.getKeys(keyList=['space'])
            if len(theseKeys) > 0:  # at least one key was pressed
                key_resp_3.keys = theseKeys[-1]  # just the last key pressed
                print YPOS
                name = "./DISTANCES/%s"%(expInfo['participant'])
                demValues.append(YPOS)
                repetitionsOfDistanceCheck.finished=True
    ImageComponent blockLU
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockRD
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [XPOS, -YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockLD
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, -YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent cubeRU
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [XPOS, YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent fixcross
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      image = fixcross.png
      size = [0.1, 0.1]
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 0.8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine resetRoutine
    CodeComponent code_5
      Begin Routine:
        YPOS = 0.1
  Routine DistCheckV_
    ImageComponent blockLU2
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockRD2
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [XPOS, -YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockLD2
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, -YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent cubeRU2
      stopVal [duration (s)] = 0.4
      pos [set every frame] = [XPOS, YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent image_4
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      image = fixcross.png
      size = [0.1, 0.1]
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    CodeComponent code_3
      Begin Routine:
        YPOS= YPOS - changeRate
      Each Frame:
        if key_resp_5.status == STARTED:
            theseKeys = event.getKeys(keyList=['space'])
            if len(theseKeys) > 0:  # at least one key was pressed
                key_resp_5.keys = theseKeys[-1]  # just the last key pressed
                print YPOS
                demValues.append(YPOS)
                wiederholeBisTot.finished=True
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 0.8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Englisch:
        First of all we will define your optimal distance.
        Therefore you are asked to fixate the cross in the middle of the screen and report to press 'Space' as soon as you see a switch.
        The squares are first diverging in the vertical direction, so as soon you see horizontal movement press 'Space'.
        They are directly moving together, and again as soon you see a switch, so a movement into vertical direction, press 'Space'.
        Do not press 'Space' after that but wait instead for the end of the routine.
        Press "Space" to continue

        Deutsch:
        Zu aller erst werden wir Ihre optimale Distanz der Quadrate bestimmen.
        Dazu fixieren Sie bitte den Fixpunkt in der Mitte aber achten Sie trotzdem auf die vier Quadrate.
        Sie werden beim ersten Blick eine bestimmte Bewegungsrichtung wahrnehmen, entweder horizontal oder vertikal.
        Die Quadrate werden in der vertikalen Richtung auseinandergehen und sobald Sie einen Wechsel in ihrer wahrgenommenen Bewegung wahrnehmen, drücken sie schnellstmöglich die 'Leertaste'.
        Das Ganze wird dann ebenfalls für das Zusammenlaufen der Quarate in der vertikalen Richtung gemacht.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine resetRoutine2
    CodeComponent code_6
      Begin Routine:
        YPOS = 0.95
  Routine Thanks
    TextComponent text_4
      text [set every repeat] = $finalText
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Experiment:
        finalText = "Thank You! \n Now we are set for the real experiment! \n Danke, jetzt koennen wir zum echten Experiment ueber gehen."
      End Experiment:
        import numpy as np
        means = np.mean(demValues)
        print means
        save = "./DISTANCES/%s" % expInfo['participant']
        with open(save, "w") as myfile:
            myfile.write(str(means))
  Routine BreakScreen
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $textPause
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Begin Experiment:
        ROUND = 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
      Begin Routine:
        ROUND = ROUND + 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine resetRoutine
    LoopInitiator repetitionsOfDistanceCheck loopType="TrialHandler"
      loopType = random
      nReps = 40
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      Routine DistanceCheck
    LoopTerminator repetitionsOfDistanceCheck
    Routine resetRoutine2
    LoopInitiator wiederholeBisTot loopType="TrialHandler"
      loopType = random
      nReps = 40
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      Routine DistCheckV_
    LoopTerminator wiederholeBisTot
  LoopTerminator trials
  Routine Thanks
