PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = realExperiment
  Units = use prefs
  Screen = 1
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Routines
  Routine whatFirst
    TextComponent text_2
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Done!
        Thank You for your participation!

        This Screen will automatically close in 5 Seconds
    CodeComponent speichercode
      End Experiment:
        with open("./TIMES/CoffeExpTimes", "a") as myfile:
            finalString = ', '.join(String)
            tmp2 = "%s,"%expInfo['date']
            myfile.write(tmp2)
            myfile.write(finalString)
            myfile.write("\n")
  Routine DistanceCheck
    CodeComponent codeDistanceCheck
      Begin Experiment:
        with open("./ScreenRatio") as f:
            content = f.readlines()

        ScreenH = float(content[0])
        ScreenV = float(content[1])


        DISTANCE = 1.0

        YPOS = DISTANCE
        XPOS = 5/(ScreenH/2)


        W = 0.05
        H = 0.075

        my_time = 0
        String = []
        String.append(expInfo['participant'])

        newString = "./DISTANCES/%s"%expInfo['participant']
        with open(newString) as f:
            NR = float(f.readline())

        print DISTANCE,NR,"##############"
        YPOS = NR
        XPOS = (YPOS*ScreenV)/ScreenH
        if YPOS == 1.0:
            print "ERROR!"
            win.close()
            core.quit()

        JustinClock = core.Clock()
      End Routine:
        my_time = my_time + 0.8
      Each Frame:
        if key_resp_3.status == STARTED:
            theseKeys = event.getKeys(keyList=['space'])
            if len(theseKeys) > 0:  # at least one key was pressed
                key_resp_3.keys = theseKeys[-1]  # just the last key pressed
                time_tmp = CookieClock.getTime()-CurrentTime
                String.append(str(time_tmp))
    ImageComponent blockLU
      stopVal [duration (s)] = 0.4
      pos = [-XPOS, YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockRD
      stopVal [duration (s)] = 0.4
      pos = [XPOS, -YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockLD
      stopVal [duration (s)] = 0.4
      pos = [-XPOS, -YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent blockRU
      stopVal [duration (s)] = 0.4
      pos = [XPOS, YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent fixcross
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      image = fixcross.png
      size = [0.1, 0.1]
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 0.8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine HorzVert
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      categoryChoices = Horizontal, Vertical
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    CodeComponent code_3
      End Routine:
        myTime = 0
      Each Frame:
        save = "./TIMES/%s" % expInfo['participant']
        if rating.noResponse == False:
            with open(save, "a") as myfile:
                String.append(rating.getRating())
                String.append("\n")
                finalString = ','.join(String)
                myfile.write(finalString)
                String = []
  Routine testTrial
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        English:
        Welcome to our experiment.
        In this experiment you are asked to press the 'Space' button as soon as you detect a switch.
        Each trial lasts 1.5 minutes for all in all 6 trials.
        The following trial is a Test-Trial where you can get prepared for the experiment. The Test-Trial will be presented for 10 seconds.
        The distance in the Test Trial differs from the one calculated before.
        Press 'Space' to continue

        Deutsch:
        Willkommen zu unserem Experiment!
        Druecken Sie bitte so schnell wie moeglich die 'Leertaste' sobald sie eine Veraenderung in der Bewegungsrichtung sehen.
        Jeder Test dauert 1.5 Minuten jeweils 6 Mal.
        Der folgende Versuch ist nur ein Test und dauert 10 Sekunden. Machen Sie sich mit dem Stimuli vertraut.
        Die Distanz ist jedoch nicht ihre individuelle sondern willkuerlich gewaehlt.
        Viel Spass!
        Drücken Sie die Leertaste um weiterzufahren.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Now the real experiment starts.
        The changing dots will be presented in 6 trials that each last 1.5 minutes.
        After each trial a short break is placed. Feel free to stand up or drink in that time, and as soon as you feel ready
        Press "Space" to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      End Routine:
        JustinClock.reset()
  Routine resetClock
    CodeComponent code_5
      Begin Experiment:
        CurrentTime = 0.0
      Begin Routine:
        CookieClock = core.Clock()
  Routine BreakScreen
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $textPause
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Begin Experiment:
        ROUND = 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
      Begin Routine:
        ROUND = ROUND + 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
      End Routine:
        JustinClock.reset()
  Routine testTrial_Setup
    ImageComponent cubeLU
      stopVal [duration (s)] = 0.4
      pos = [-0.3, 0.5]
      startVal [time (s)] = 0.0
      image = cube.png
      size [set every repeat] = [WW, HH]
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    ImageComponent cubeRD
      stopVal [duration (s)] = 0.4
      pos = [0.3,-0.5]
      startVal [time (s)] = 0.0
      image = cube.png
      size [set every repeat] = [WW, HH]
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    ImageComponent cubeLD
      stopVal [duration (s)] = 0.4
      pos = [-0.3, -0.5]
      startVal [time (s)] = 0.4
      image = cube.png
      size [set every repeat] = [WW, HH]
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    ImageComponent cubeRU
      stopVal [duration (s)] = 0.4
      pos = [0.3, 0.5]
      startVal [time (s)] = 0.4
      image = cube.png
      size [set every repeat] = [WW, HH]
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    CodeComponent code_2
      Begin Experiment:
        WW = 0.05
        HH = 0.075
      Begin Routine:
        WW = 0.05
        HH = 0.075
    ImageComponent image
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      image = fixcross.png
      size = [0.1, 0.1]
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Flow
  Routine testTrial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine testTrial_Setup
  LoopTerminator trials
  Routine trial
  LoopInitiator trialsReal loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator timeGetterTrial loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine resetClock
      LoopInitiator repetitionsOfDistanceCheck loopType="TrialHandler"
        loopType = random
        nReps = 112
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        Routine DistanceCheck
      LoopTerminator repetitionsOfDistanceCheck
      Routine BreakScreen
    LoopTerminator timeGetterTrial
  LoopTerminator trialsReal
  Routine whatFirst
